[
    {
        "object.className": "ProtImportMicrographs",
        "object.id": "2",
        "object.label": "1. import mics",
        "object.comment": "",
        "runName": null,
        "runMode": 0,
        "importFrom": 0,
        "filesPath": "/usr/local/scipion/data/tests/xmipp_tutorial/micrographs/*.mrc",
        "filesPattern": "",
        "copyFiles": false,
        "emxFile": null,
        "mdFile": null,
        "sqliteFile": null,
        "haveDataBeenPhaseFlipped": false,
        "acquisitionWizard": null,
        "voltage": 300.0,
        "sphericalAberration": 2.0,
        "amplitudeContrast": 0.1,
        "magnification": 50000,
        "samplingRateMode": 0,
        "samplingRate": 1.237,
        "scannedPixelSize": 7.0
    },
    {
        "object.className": "XmippProtPreprocessMicrographs",
        "object.id": "43",
        "object.label": "2. downsample x5",
        "object.comment": "",
        "runName": null,
        "runMode": 0,
        "doCrop": false,
        "cropPixels": 10,
        "doLog": false,
        "logA": 4.431,
        "logB": 0.4018,
        "logC": 336.6,
        "doRemoveBadPix": false,
        "mulStddev": 5,
        "doDownsample": true,
        "downFactor": 5.0,
        "hostName": "localhost",
        "numberOfThreads": 4,
        "numberOfMpi": 1,
        "inputMicrographs": "2.outputMicrographs"
    },
    {
        "object.className": "ProtCTFFind",
        "object.id": "80",
        "object.label": "3. ctffind3",
        "object.comment": "",
        "runName": null,
        "runMode": 0,
        "recalculate": false,
        "sqliteFile": null,
        "ctfDownFactor": 1.0,
        "useCftfind4": true,
        "astigmatism": 100.0,
        "findPhaseShift": false,
        "lowRes": 0.14,
        "highRes": 0.46,
        "minDefocus": 0.5,
        "maxDefocus": 4.0,
        "windowSize": 256,
        "hostName": "localhost",
        "numberOfThreads": 4,
        "numberOfMpi": 1,
        "inputMicrographs": "43.outputMicrographs"
    },
    {
        "object.className": "XmippProtParticlePicking",
        "object.id": "121",
        "object.label": "4a. xmipp picking",
        "object.comment": "",
        "runName": null,
        "runMode": 0,
        "memory": 2.0,
        "inputMicrographs": "43.outputMicrographs"
    },
    {
        "object.className": "XmippProtExtractParticles",
        "object.id": "178",
        "object.label": "5. extract particles",
        "object.comment": "",
        "runName": null,
        "runMode": 0,
        "downsampleType": 0,
        "downFactor": 2.0,
        "boxSize": 110,
        "doSort": false,
        "rejectionMethod": 0,
        "maxZscore": 3,
        "percentage": 5,
        "doRemoveDust": true,
        "thresholdDust": 3.5,
        "doInvert": true,
        "doFlip": true,
        "doNormalize": true,
        "normType": 2,
        "backRadius": -1,
        "hostName": "localhost",
        "numberOfThreads": 4,
        "numberOfMpi": 1,
        "ctfRelations": "80.outputCTF",
        "inputCoordinates": "356.outputCoordinates2"
    },
    {
        "object.className": "ProtImportVolumes",
        "object.id": "223",
        "object.label": "6. import vol",
        "object.comment": "",
        "runName": null,
        "runMode": 0,
        "importFrom": 0,
        "filesPath": "/usr/local/scipion/data/tests/xmipp_tutorial/volumes/BPV_scale_filtered_windowed_110.vol",
        "filesPattern": null,
        "copyFiles": false,
        "samplingRate": 6.185
    },
    {
        "object.className": "SparxGaussianProtPicking",
        "object.id": "356",
        "object.label": "eman2 - sparx gaussian picker",
        "object.comment": "",
        "runName": null,
        "runMode": 0,
        "boxSize": 110,
        "lowerThreshold": 1.0,
        "higherThreshold": 30.0,
        "gaussWidth": 1.0,
        "inputMicrographs": "43.outputMicrographs"
    },
    {
        "object.className": "XmippProtProjMatch",
        "object.id": "423",
        "object.label": "xmipp3 - projection matching",
        "object.comment": "",
        "runName": null,
        "runMode": 0,
        "useInitialAngles": false,
        "cleanUpFiles": false,
        "doCTFCorrection": true,
        "doAutoCTFGroup": true,
        "ctfGroupMaxDiff": 0.1,
        "ctfGroupMaxResol": 5.6,
        "setOfDefocus": "",
        "paddingFactor": 2.0,
        "wienerConstant": -1.0,
        "maskType": 1,
        "maskRadius": 55,
        "numberOfIterations": 4,
        "innerRadius": "0",
        "outerRadius": "55",
        "availableMemory": 2,
        "angSamplingRateDeg": "3 2 1 0.5",
        "maxChangeInAngles": "1000 8 4 2",
        "perturbProjectionDirections": "0",
        "projectionMethod": 1,
        "paddingAngularProjection": 1.0,
        "kernelAngularProjection": 2,
        "maxChangeOffset": "2x1000 5",
        "search5DShift": "2x5",
        "search5DStep": "2",
        "doRestricSearchbyTiltAngle": false,
        "tilt0": -91.0,
        "tiltF": -91.0,
        "symmetry": "i1",
        "symmetryGroupNeighbourhood": "",
        "onlyWinner": "0",
        "discardImages": 0,
        "minimumCrossCorrelation": "0.1",
        "discardPercentage": "10",
        "discardPercentagePerClass": "10",
        "doScale": false,
        "scaleStep": "1",
        "scaleNumberOfSteps": "3",
        "projMatchingExtra": "",
        "performAlign2D": false,
        "doAlign2D": "0",
        "align2DIterNr": "4",
        "align2dMaxChangeOffset": "2x1000 2x10",
        "align2dMaxChangeRot": "2x1000 2x20",
        "reconstructionMethod": 0,
        "fourierMaxFrequencyOfInterest": 0.25,
        "fourierReconstructionExtraCommand": "",
        "artLambda": "0.2",
        "artReconstructionExtraCommand": "-k 0.5 -n 10 ",
        "wbpReconstructionExtraCommand": "",
        "doComputeResolution": true,
        "doSplitReferenceImages": "1",
        "doLowPassFilter": true,
        "useFscForFilter": true,
        "constantToAddToFiltration": "0.05",
        "constantToAddToMaxReconstructionFrequency": "0.1",
        "mpiJobSize": 8,
        "hostName": "localhost",
        "numberOfThreads": 1,
        "numberOfMpi": 4,
        "inputParticles": "178.outputParticles",
        "input3DReferences": "223.outputVolume"
    },
    {
        "object.className": "EmanProtBoxing",
        "object.id": "534",
        "object.label": "eman2 - boxer",
        "object.comment": "",
        "runName": null,
        "runMode": 0,
        "inputMicrographs": "43.outputMicrographs"
    }
]
