[
    {
        "object.className": "SpiderProtFilter",
        "object.id": "2070",
        "object.label": "spider - filter particles",
        "object.comment": "",
        "runName": null,
        "runMode": 0,
        "filterType": 3,
        "filterMode": 0,
        "usePadding": true,
        "filterRadius": 0.12,
        "lowFreq": 0.1,
        "highFreq": 0.5,
        "temperature": 0.3,
        "hostName": "localhost",
        "numberOfThreads": 2,
        "numberOfMpi": 1
    },
    {
        "object.className": "XmippProtCL2DAlign",
        "object.id": "2120",
        "object.label": "xmipp3 - align with cl2d",
        "object.comment": "",
        "runName": null,
        "runMode": 0,
        "useReferenceImage": false,
        "maximumShift": 10,
        "numberOfIterations": 10,
        "hostName": "localhost",
        "numberOfThreads": 1,
        "numberOfMpi": 4,
        "inputParticles": "2070.__attribute__outputParticles"
    },
    {
        "object.className": "SpiderProtAlignPairwise",
        "object.id": "2152",
        "object.label": "spider - align pairwise",
        "object.comment": "",
        "runName": null,
        "runMode": 0,
        "innerRadius": 5,
        "outerRadius": 29,
        "cgOption": 1,
        "searchRange": 8,
        "stepSize": 2,
        "hostName": "localhost",
        "numberOfThreads": 2,
        "inputParticles": "2070.__attribute__outputParticles"
    },
    {
        "object.className": "SpiderProtCustomMask",
        "object.id": "2233",
        "object.label": "spider - custom mask",
        "object.comment": "",
        "runName": null,
        "runMode": 0,
        "filterRadius1": 0.1,
        "sdFactor": 0.9,
        "filterRadius2": 0.2,
        "maskThreshold": 0.01,
        "inputImage": "2152.__attribute__outputAverage"
    },
    {
        "object.className": "SpiderProtCAPCA",
        "object.id": "2267",
        "object.label": "spider - capca",
        "object.comment": "",
        "runName": null,
        "runMode": 0,
        "analysisType": 0,
        "addConstant": 0.0,
        "numberOfFactors": 25,
        "maskType": 1,
        "radius": -1,
        "inputParticles": "2152.__attribute__outputParticles",
        "maskImage": "2233.__attribute__outputMask"
    },
    {
        "object.className": "SpiderProtClassifyDiday",
        "object.id": "2319",
        "object.label": "spider - classify diday",
        "object.comment": "",
        "runName": null,
        "runMode": 0,
        "numberOfFactors": 10,
        "inputParticles": "2152.__attribute__outputParticles",
        "pcaFile": "2267.__attribute__imcFile"
    },
    {
        "object.className": "SpiderProtClassifyWard",
        "object.id": "2346",
        "object.label": "spider - classify ward",
        "object.comment": "",
        "runName": null,
        "runMode": 0,
        "numberOfFactors": 10,
        "inputParticles": "2152.__attribute__outputParticles",
        "pcaFile": "2267.__attribute__imcFile"
    }
]
